def model PU as
  def import using "../common/units.cellml" for
    unit time_units using unit time_units;
    unit millimolar using unit millimolar;
    unit per_millimolar using unit per_millimolar;
    unit millimolar_per_second using unit millimolar_per_second;
    unit R_units using unit R_units;
    unit F_units using unit F_units;
    unit Temperature_units using unit Temperature_units;
    unit conductance_units using unit conductance_units;
    unit Inverse_Voltage_units using unit Inverse_Voltage_units;
    unit voltage_units using unit voltage_units;
    unit current_units using unit current_units;
    unit millimolar_per_second_per_millivolt using unit millimolar_per_second_per_millivolt;
    unit millifarads using unit millifarads;
    unit volume_units using unit volume_units;
    unit rate_constants_units using unit rate_constants_units;
  enddef;

  def comp PU_unit as
    var P_PU: dimensionless {init: 0.001};
    var P_mito: dimensionless {init: 0.12871};
    var P_ER: dimensionless {init: 0.1};
    var V_MITO: volume_units;
    var V_ER: volume_units;
    var V_PU: volume_units;
    var fe: dimensionless {init: 0.01};
    var fm: dimensionless {init: 0.0003};
    var time: time_units {priv: out, pub: in};
    var Na_i: millimolar {pub: in};
    var Ca_i: millimolar {pub: in};
    var FoRT: Inverse_Voltage_units {pub: in};
    var RToF: voltage_units {pub: in};
    var Ca_PU: millimolar {init: 0.0000902, pub: out};
    var F: F_units {pub: in};
    var Ca_m: millimolar {init: 0.000136};
    var Ca_ER: millimolar {init: 0.007299};
    var ADP_m: millimolar {init: 2.60093454};
    var ADP_i: millimolar {init: 0.0077282};
    var NADH_m: millimolar {init: 0.101476};
    var h: dimensionless {init: 0.9397};
    var IP3: millimolar {init: 0.0006};
    var deltaPsi: voltage_units {init: 164.000044};
    var deltapH: dimensionless {init: -0.4};
    var Cmito: millifarads {init: 0.006995};
    var K_res: dimensionless {init: 1.35e18};
    var r1: dimensionless {init: 2.077e-18};
    var r2: dimensionless {init: 1.728e-9};
    var r3: dimensionless {init: 1.059e-26};
    var ra: rate_constants_units {init: 6.394e-10};
    var rb: rate_constants_units {init: 1.762e-13};
    var rc1: rate_constants_units {init: 2.656e-19};
    var rc2: rate_constants_units {init: 8.632e-27};
    var deltaPsi_B: voltage_units {init: 50};
    var g: dimensionless {init: 0.85};
    var K_F1: millimolar {init: 1.71e9};
    var Pi_m: millimolar {init: 20};
    var p1: dimensionless {init: 1.346e-8};
    var p2: dimensionless {init: 7.739e-7};
    var p3: dimensionless {init: 6.65e-15};
    var pa: rate_constants_units {init: 1.656e-5};
    var pb: rate_constants_units {init: 3.373e-7};
    var pc1: rate_constants_units {init: 9.651e-14};
    var pc2: rate_constants_units {init: 4.845e-19};
    var frac: dimensionless {init: 0.5};
    var K_act: millimolar {init: 0.00038};
    var na: dimensionless {init: 2.8};
    var deltaPsi_star: voltage_units {init: 91};
    var K_Na: millimolar {init: 9.4};
    var K_Ca: millimolar {init: 0.003};
    var K_trans: millimolar {init: 0.006};
    var L: dimensionless {init: 50};
    var b: dimensionless {init: 0.5};
    var beta_max: rate_constants_units {init: 2.055};
    var beta1: per_millimolar {init: 1.66};
    var beta2: per_millimolar {init: 0.0249};
    var beta3: per_millimolar {init: 4};
    var beta4: per_millimolar {init: 2.83};
    var beta5: per_millimolar {init: 1.3};
    var beta6: per_millimolar {init: 2.66};
    var beta7: per_millimolar {init: 0.16};
    var KCa_PDH: millimolar {init: 0.00005};
    var u1: dimensionless {init: 15};
    var u2: dimensionless {init: 1.1};
    var n: dimensionless {init: 2};
    var K_Glc: millimolar {init: 8.7};
    var nhyd: dimensionless {init: 2.7};
    var K_hyd: rate_constants_units {init: 0.05125};
    var J_ERleak: rate_constants_units {init: 1.666667};
    var Jmax_IP3: rate_constants_units {init: 50000};
    var d_IP3: millimolar {init: 0.00025};
    var d_ACT: millimolar {init: 0.001};
    var d_INH: millimolar {init: 0.0014};
    var tauh: time_units {init: 4};
    var Jmax_serca: millimolar_per_second {init: 1.8333};
    var k_serca: millimolar {init: 0.00042};
    var conc: millimolar {init: 0.001};
    var Jmax_uni: rate_constants_units {init: 5000};
    var Jmax_NaCa: millimolar_per_second {init: 0.05};
    var J_max_leak: rate_constants_units {init: 0.01};
    var rho_res: millimolar {init: 0.4};
    var rho_F1: millimolar {init: 0.7};
    var g_H: millimolar_per_second_per_millivolt {init: 0.0033333};
    var J_red_basal: millimolar_per_second {init: 0.3333};
    var Jmax_ANT: millimolar_per_second {init: 15};
    var J_hyd_max: millimolar_per_second {init: 0.037625};
    var Glc: millimolar {init: 1};
    var total_NAD_m: millimolar {init: 8};
    var total_ANP_m: millimolar {init: 12};
    var total_ANP_i: millimolar {init: 2};
    var NAD_m: millimolar;
    var ATP_m: millimolar;
    var ADP_mfree: millimolar;
    var ADP3_m: millimolar;
    var ATP4_m: millimolar;
    var ATP_i: millimolar;
    var ADP_ifree: millimolar;
    var ADP3_i: millimolar;
    var MgADP_i: millimolar;
    var ATP4_i: millimolar;
    var J_ERout: millimolar_per_second {pub: out};
    var J_SERCA: millimolar_per_second {pub: out};
    var MWC: millimolar;
    var J_uni: millimolar_per_second {pub: out};
    var J_NaCa: millimolar_per_second {pub: out};
    var J_leak: millimolar_per_second {pub: out};
    var J_red: millimolar_per_second;
    var J_pTCA: millimolar_per_second;
    var A_F1: voltage_units;
    var J_pF1: millimolar_per_second;
    var J_HF1: millimolar_per_second;
    var A_res: voltage_units;
    var J_o: millimolar_per_second;
    var J_glyTotal: millimolar_per_second;
    var f_PDHa: dimensionless;
    var J_Hres: millimolar_per_second;
    var J_ANT: millimolar_per_second;
    var PMF: voltage_units;
    var J_Hleak: millimolar_per_second;
    var J_pGly: millimolar_per_second;
    var J_hydSS: millimolar_per_second;
    var J_hyd: millimolar_per_second;
    var Vol: volume_units {init: 1e-12};
    var P_cyto: dimensionless {init: 0.7, priv: out, pub: out};
    var V_cyto: volume_units {priv: out};
    var fc: dimensionless {init: 0.01, priv: out};
    V_cyto = Vol*P_cyto;
    V_MITO = Vol*P_mito;
    V_PU = Vol*P_PU;
    V_ER = Vol*P_ER;
    J_ERout = (Jmax_IP3*pow(IP3/(IP3+d_IP3), 3{dimensionless})*pow(Ca_PU/(Ca_PU+d_ACT), 3{dimensionless})*pow(h, 3{dimensionless})+J_ERleak)*(Ca_ER-Ca_PU);
    J_SERCA = Jmax_serca*sqr(Ca_PU)/(sqr(k_serca)+sqr(Ca_PU));
    MWC = conc*Ca_PU/K_trans*pow(1{dimensionless}+Ca_PU/K_trans, 3{dimensionless})/(pow(1{dimensionless}+Ca_PU/K_trans, 4{dimensionless})+L/pow(1{dimensionless}+Ca_PU/K_act, na));
    J_uni = Jmax_uni*(MWC-Ca_m*exp(-2{dimensionless}*FoRT*(deltaPsi-deltaPsi_star)))*2{dimensionless}*FoRT*(deltaPsi-deltaPsi_star)/(1{dimensionless}-exp(-2{dimensionless}*FoRT*(deltaPsi-deltaPsi_star)));
    J_NaCa = Jmax_NaCa*exp(b*FoRT*(deltaPsi-deltaPsi_star))/((1{dimensionless}+pow(K_Na/Na_i, n))*(1{dimensionless}+K_Ca/Ca_m));
    J_leak = J_max_leak*(Ca_PU-Ca_i);
    A_res = RToF*ln(K_res*sqrt(NADH_m)/sqrt(NAD_m));
    J_o = rho_res*0.5{dimensionless}*((ra*pow(10{dimensionless}, 6{dimensionless}*deltapH)+rc1*exp(6{dimensionless}*deltaPsi_B*FoRT))*exp(A_res*FoRT)+(-1{dimensionless}*ra*exp(g*6{dimensionless}*FoRT*deltaPsi))+rc2*exp(FoRT*A_res)*exp(FoRT*deltaPsi*6{dimensionless}*g))/((1{dimensionless}+r1*exp(FoRT*A_res))*exp(FoRT*deltaPsi_B*6{dimensionless})+(r2+r3*exp(FoRT*A_res))*exp(FoRT*deltaPsi*g*6{dimensionless}));
    J_Hres = rho_res*3.966{dimensionless}*(ra*pow(10{dimensionless}, 6{dimensionless}*deltapH)*exp(FoRT*A_res)+rb*pow(10{dimensionless}, 6{dimensionless}*deltapH)+(-1{dimensionless}*(ra+rb)*exp(g*FoRT*deltaPsi*6{dimensionless})))/((1{dimensionless}+r1*exp(FoRT*A_res))*exp(6{dimensionless}*FoRT*deltaPsi_B)+(r2+r3*exp(FoRT*A_res))*exp(g*6{dimensionless}*FoRT*deltaPsi));
    J_glyTotal = beta_max*(1{dimensionless}+beta1*Glc)*beta2*Glc*ATP_i/(1{dimensionless}+beta3*ATP_i+(1{dimensionless}+beta4*ATP_i)*beta5*Glc+(1{dimensionless}+beta6*ATP_i)*beta7*Glc);
    f_PDHa = 1{dimensionless}/(1{dimensionless}+u2*(1{dimensionless}+u1/sqr(1{dimensionless}+Ca_m/KCa_PDH)));
    J_red = J_red_basal+6.3944{dimensionless}*f_PDHa*J_glyTotal;
    J_pTCA = J_red_basal/3{dimensionless}+0.84{dimensionless}*f_PDHa*J_glyTotal;
    A_F1 = RToF*ln(K_F1*ATP_m/(ADP_mfree*Pi_m));
    J_pF1 = rho_F1*(-1{dimensionless})*((pa*pow(10{dimensionless}, 3{dimensionless}*deltapH)+pc1*exp(3{dimensionless}*FoRT*deltaPsi_B))*exp(FoRT*A_F1)+(-1{dimensionless}*pa*exp(3{dimensionless}*FoRT*deltaPsi))+pc2*exp(FoRT*A_F1)*exp(3{dimensionless}*FoRT*deltaPsi))/((1{dimensionless}+p1*exp(FoRT*A_F1))*exp(3{dimensionless}*FoRT*deltaPsi_B)+(p2+p3*exp(FoRT*A_F1))*exp(3{dimensionless}*FoRT*deltaPsi));
    J_HF1 = -1{dimensionless}*rho_F1*3{dimensionless}*(pa*pow(10{dimensionless}, 3{dimensionless}*deltapH)*exp(FoRT*A_F1)+pb*pow(10{dimensionless}, 3{dimensionless}*deltapH)+(-1{dimensionless}*(pa+pb)*exp(3{dimensionless}*FoRT*deltaPsi)))/((1{dimensionless}+p1*exp(FoRT*A_F1))*exp(3{dimensionless}*FoRT*deltaPsi_B)+(p2+p3*exp(FoRT*A_F1))*exp(3{dimensionless}*FoRT*deltaPsi));
    J_ANT = Jmax_ANT*(1{dimensionless}-ATP4_i*ADP3_m/(ADP3_i*ATP4_m)*exp(-1{dimensionless}*FoRT*deltaPsi))/((1{dimensionless}+ATP4_i/ADP3_i*exp(-1{dimensionless}*frac*FoRT*deltaPsi))*(1{dimensionless}+ADP3_m/ATP4_m));
    PMF = deltaPsi-2.303{dimensionless}*RToF*deltapH;
    J_Hleak = g_H*PMF;
    J_pGly = 0.15{dimensionless}*J_glyTotal;
    J_hydSS = J_hyd_max/(1{dimensionless}+pow(K_Glc/Glc, nhyd));
    J_hyd = K_hyd*ATP_i+J_hydSS;
    ode(NADH_m, time) = J_red-J_o;
    NAD_m = total_NAD_m-NADH_m;
    ode(ADP_m, time) = J_ANT+(-1{dimensionless}*J_pTCA)+(-1{dimensionless}*J_pF1);
    ATP_m = total_ANP_m-ADP_m;
    ADP_mfree = 0.8{dimensionless}*ADP_m;
    ADP3_m = 0.45{dimensionless}*ADP_mfree;
    ATP4_m = 0.05{dimensionless}*ATP_m;
    ode(ADP_i, time) = -1{dimensionless}*J_ANT*V_MITO/V_cyto+J_hyd+(-1{dimensionless}*J_pGly);
    ATP_i = total_ANP_i-ADP_i;
    ADP_ifree = 0.3{dimensionless}*ADP_i;
    ADP3_i = 0.45{dimensionless}*ADP_ifree;
    MgADP_i = 0.55{dimensionless}*ADP_ifree;
    ATP4_i = 0.05{dimensionless}*ATP_i;
    ode(Ca_PU, time) = fc*((J_NaCa-J_uni)*V_MITO/V_PU+(J_ERout-J_SERCA)*V_ER/V_PU+(-1{dimensionless}*J_leak*V_cyto/V_PU));
    ode(Ca_m, time) = fm*(J_uni-J_NaCa);
    ode(Ca_ER, time) = fe*(J_SERCA-J_ERout);
    ode(deltaPsi, time) = -1{dimensionless}*F*V_MITO*1000000{millimole_to_nanomole}*1{dimensionless}/Cmito*(J_Hleak+(-1{dimensionless}*J_Hres)+J_ANT+J_HF1+2{dimensionless}*J_uni);
    ode(h, time) = 1{per_millimolar}*(d_INH-h*(Ca_PU+d_INH))/tauh;
  enddef;
enddef;
