<?xml version='1.0' encoding='UTF-8'?>
<model cmeta:id="Ether-a-go-go-potassiuom-channel" name="IERG" xmlns="http://www.cellml.org/cellml/1.1#" xmlns:cellml="http://www.cellml.org/cellml/1.1#" xmlns:cmeta="http://www.cellml.org/metadata/1.0#" xmlns:xlink="http://www.w3.org/1999/xlink">
    <import xlink:href="../common/units.cellml">
        <units name="current_units" units_ref="current_units"/>
        <units name="voltage_units" units_ref="voltage_units"/>
        <units name="time_units" units_ref="time_units"/>
        <units name="conductance_units" units_ref="conductance_units"/>
        <units name="millimolar" units_ref="millimolar"/>
    </import>
    <component name="d_ERG">
        <variable name="Vm" public_interface="in" units="voltage_units"/>
        <variable name="d_inf_ERG" units="dimensionless"/>
        <variable name="tau_d_ERG" units="time_units"/>
        <variable initial_value="0" name="d_ERG" public_interface="out" units="dimensionless"/>
        <variable name="time" public_interface="in" units="time_units"/>
        <variable name="T_correction_K" public_interface="in" units="dimensionless"/>
        <math xmlns="http://www.w3.org/1998/Math/MathML">
            <apply>
                <eq/>
                <ci>d_inf_ERG</ci>
                <apply>
                    <plus/>
                    <cn cellml:units="dimensionless">0.2</cn>
                    <apply>
                        <divide/>
                        <cn cellml:units="dimensionless">0.8</cn>
                        <apply>
                            <plus/>
                            <cn cellml:units="dimensionless">1</cn>
                            <apply>
                                <exp/>
                                <apply>
                                    <divide/>
                                    <apply>
                                        <plus/>
                                        <ci>Vm</ci>
                                        <cn cellml:units="voltage_units">20</cn>
                                    </apply>
                                    <apply>
                                        <minus/>
                                        <cn cellml:units="voltage_units">1.8</cn>
                                    </apply>
                                </apply>
                            </apply>
                        </apply>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>tau_d_ERG</ci>
                <apply>
                    <times/>
                    <ci>T_correction_K</ci>
                    <cn cellml:units="time_units">0.003</cn>
                </apply>
            </apply>
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>time</ci>
                    </bvar>
                    <ci>d_ERG</ci>
                </apply>
                <apply>
                    <divide/>
                    <apply>
                        <minus/>
                        <ci>d_inf_ERG</ci>
                        <ci>d_ERG</ci>
                    </apply>
                    <ci>tau_d_ERG</ci>
                </apply>
            </apply>
        </math>
    </component>
    <component name="I_ERG">
        <variable name="I_ERG" public_interface="out" units="current_units"/>
        <variable name="E_K" units="voltage_units"/>
        <variable initial_value="2.5" name="G_max_ERG" units="conductance_units"/>
        <variable name="Vm" private_interface="out" public_interface="in" units="voltage_units"/>
        <variable name="d_ERG" private_interface="in" units="dimensionless"/>
        <variable name="RToF" public_interface="in" units="voltage_units"/>
        <variable name="K_o" public_interface="in" units="millimolar"/>
        <variable name="K_i" public_interface="in" units="millimolar"/>
        <variable name="T_correction_K" private_interface="out" public_interface="in" units="dimensionless"/>
        <variable name="time" private_interface="out" public_interface="in" units="time_units"/>
        <math xmlns="http://www.w3.org/1998/Math/MathML">
            <apply>
                <eq/>
                <ci>E_K</ci>
                <apply>
                    <times/>
                    <ci>RToF</ci>
                    <apply>
                        <ln/>
                        <apply>
                            <divide/>
                            <ci>K_o</ci>
                            <ci>K_i</ci>
                        </apply>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>I_ERG</ci>
                <apply>
                    <times/>
                    <ci>G_max_ERG</ci>
                    <ci>d_ERG</ci>
                    <apply>
                        <minus/>
                        <ci>Vm</ci>
                        <ci>E_K</ci>
                    </apply>
                </apply>
            </apply>
        </math>
    </component>
    <connection>
        <map_components component_1="d_ERG" component_2="I_ERG"/>
        <map_variables variable_1="Ca_i" variable_2="Ca_i"/>
        <map_variables variable_1="Vm_SM" variable_2="Vm_SM"/>
        <map_variables variable_1="d_ERG" variable_2="d_ERG"/>
        <map_variables variable_1="time" variable_2="time"/>
    </connection>
    <group>
        <relationship_ref relationship="encapsulation"/>
        <component_ref component="I_ERG">
            <component_ref component="d_ERG"/>
        </component_ref>
    </group>
</model>
